---
API: 3
OpenSesame: 4.0.20
Platform: posix
---
set width 1024
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "/home/lotje/Documents/Research, teaching and programming/OpenSesame/Scripts/Work Lindenloot/Manon Mulckhuyse"
set disable_garbage_collection True
set description "A template containing a practice and an experimental phase"
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#3d3846"

define notepad QUESTIONS
	__note__
	- Percentage change/no change 50/50?
	- Percentage fear / neutral 50/50?
	- Feedback when too slow?
	- Exact locations (from visual degrees to px)
	- Random durations
	- How to log messages/triggers?
	- Faces not central
	- Determine threshold (in px)
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop block_loop
	set source table
	set skip 0
	set repeat 2
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 24
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if False
	setcycle 0 change_condition change
	setcycle 0 emotional_condition fear
	setcycle 0 target_position 1
	setcycle 1 change_condition no_change
	setcycle 1 emotional_condition fear
	setcycle 1 target_position 1
	setcycle 2 change_condition change
	setcycle 2 emotional_condition neutral
	setcycle 2 target_position 1
	setcycle 3 change_condition no_change
	setcycle 3 emotional_condition neutral
	setcycle 3 target_position 1
	setcycle 4 change_condition change
	setcycle 4 emotional_condition fear
	setcycle 4 target_position 2
	setcycle 5 change_condition no_change
	setcycle 5 emotional_condition fear
	setcycle 5 target_position 2
	setcycle 6 change_condition change
	setcycle 6 emotional_condition neutral
	setcycle 6 target_position 2
	setcycle 7 change_condition no_change
	setcycle 7 emotional_condition neutral
	setcycle 7 target_position 2
	setcycle 8 change_condition change
	setcycle 8 emotional_condition fear
	setcycle 8 target_position 3
	setcycle 9 change_condition no_change
	setcycle 9 emotional_condition fear
	setcycle 9 target_position 3
	setcycle 10 change_condition change
	setcycle 10 emotional_condition neutral
	setcycle 10 target_position 3
	setcycle 11 change_condition no_change
	setcycle 11 emotional_condition neutral
	setcycle 11 target_position 3
	setcycle 12 change_condition change
	setcycle 12 emotional_condition fear
	setcycle 12 target_position 4
	setcycle 13 change_condition no_change
	setcycle 13 emotional_condition fear
	setcycle 13 target_position 4
	setcycle 14 change_condition change
	setcycle 14 emotional_condition neutral
	setcycle 14 target_position 4
	setcycle 15 change_condition no_change
	setcycle 15 emotional_condition neutral
	setcycle 15 target_position 4
	setcycle 16 change_condition change
	setcycle 16 emotional_condition fear
	setcycle 16 target_position 5
	setcycle 17 change_condition no_change
	setcycle 17 emotional_condition fear
	setcycle 17 target_position 5
	setcycle 18 change_condition change
	setcycle 18 emotional_condition neutral
	setcycle 18 target_position 5
	setcycle 19 change_condition no_change
	setcycle 19 emotional_condition neutral
	setcycle 19 target_position 5
	setcycle 20 change_condition change
	setcycle 20 emotional_condition fear
	setcycle 20 target_position 6
	setcycle 21 change_condition no_change
	setcycle 21 emotional_condition fear
	setcycle 21 target_position 6
	setcycle 22 change_condition change
	setcycle 22 emotional_condition neutral
	setcycle 22 target_position 6
	setcycle 23 change_condition no_change
	setcycle 23 emotional_condition neutral
	setcycle 23 target_position 6
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run block_loop True

define inline_script constants
	set description "Executes Python code"
	set _run ""
	___prepare__
	# Sizes and eccentricities (see Born & Theeuwes, 2011):
	# Imaginary circle: 9.5 dg
	R_IMAGINARY_CIRCLE = 200
	# Diameter of the stimuli: 1.5 dg
	R_CIRCLE = 10.
	
	# Twelve positions on an imaginary circle:
	L_POS =  getPos(12, R_IMAGINARY_CIRCLE)
	
	# The even positions will serve as 
	# the stimulus positions
	L_STIM_POS = L_POS[::2]
	
	# The odd positions will serve as potential 
	# distractor positions:
	L_DIST_POS = L_POS[1::2]
	
	# TIMINGS:
	FIX_DUR = 500.
	
	# COLORS:
	DIST_COL = "red"
	TARGET_COL = "green"
	
	# Threshold:
	THRESHOLD = 100
	__end__

define inline_script debug
	set description "Executes Python code"
	set _run ""
	set _prepare "debug = True"

define inline_script determine_distractor_face
	set description "Executes Python code"
	set _run ""
	___prepare__
	face = random.choice(["F01_", "F02_", "F03_", "F04_",\
	  "M01_", "M02_", "M03_", "M04_"])
	
	if emotional_condition == "fear":
	    face_stim = face + "FE.png"
	elif emotional_condition == "neutral":
	    face_stim = face + "NE.png"
	else:
	  raise Exception("Unknown emotional condition. Could not determine face_path")
	                  
	face_path = exp.pool[face_stim]
	__end__

define inline_script display_change
	set description "Executes Python code"
	___run__
	my_canvas['dist_image'].fname = change_path
	
	
	
	my_canvas.fixdot()
	my_canvas.show()
	__end__
	___prepare__
	# On CHANGE trials, the emtional expression changes
	print("change_condition = " + change_condition)
	if change_condition == "change":
	  if getChange(emotional_condition) == "neutral":
	    change_face= face + "NE" + ".png"
	  elif getChange(emotional_condition) == "fear":
	    change_face= face + "FE" + ".png"
	  
	  
	# On NO-CHANGE trials, the emotional expression 
	# stays the same
	elif change_condition == "no_change":
	  change_face = face_path
	  
	else:
	  raise Exception("Unknown change condition")
	  
	change_path = exp.pool[change_face]
	__end__

define inline_script display_distractor
	set description "Executes Python code"
	___run__
	# Element interface
	my_canvas['dist_image'] = Image(face_path, x=x_dist, y=y_dist, scale=0.5)
	my_canvas.show()
	__end__
	___prepare__
	# TODO: remove adjancent positions:
	dist_pos = random.choice(L_DIST_POS)
	x_dist, y_dist = dist_pos
	
	path = exp.pool['%s.png' % emotional_condition]
	__end__

define inline_script display_fixdot
	set description "Executes Python code"
	___run__
	my_canvas['my_fixdot'] = FixDot()
	my_canvas.show()
	clock.sleep(FIX_DUR)
	__end__
	___prepare__
	my_canvas = Canvas()
	__end__

define inline_script display_red_circles
	set description "Executes Python code"
	___run__
	my_canvas.show()
	clock.sleep(1500)
	__end__
	___prepare__
	stim_counter = 0
	# Loop through 6 positions:
	for pos in L_STIM_POS:
	  stim_counter += 1
	  # Draw red circle to canvas
	
	  _x, _y = pos
	  my_canvas['stim_%s' % stim_counter] = Circle(_x, _y, R_CIRCLE, \
	            fill=True, color=DIST_COL)
	
	
	  
	__end__

define inline_script display_target
	set description "Executes Python code"
	___run__
	my_canvas['stim_%s' % target_position].color = TARGET_COL
	my_canvas.show()
	__end__
	___prepare__
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run QUESTIONS True
	run import True
	run functions True
	run constants True
	run debug True
	run new_pygaze_init True
	run experimental_loop True

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if False
	setcycle 0 practice no
	run block_sequence

define inline_script functions
	set description "Executes Python code"
	set _run ""
	___prepare__
	def getPos(num_positions, radius):
	    
	    """
	    Returns a list of a given number of coordinates on an       
	    imaginary circle with a given radius
	    """
	    positions = []
	    
	    for i in range(num_positions):
	        angle = i * (2 * math.pi) / num_positions
	        x = radius * math.cos(angle)
	        y = radius * math.sin(angle)
	        positions.append((x, y))
	    return positions
	
	def getChange(current_condition):
	    
	    """
	    Returns the changed condition, i.e.
	    fear -> neutral and vice versa
	    """
	    
	    if current_condition == "neutral":
	        change_condition = "fear"
	
	    elif current_condition == "fear":
	        change_condition = "neutral"
	        
	    else:
	        raise Exception("Unknown current condition")
	        
	    return change_condition
	
	def getDistance(x1, y1, x2, y2):
	    
	    """
	    Euclidean distance formula to calculate the distance
	    between two points in a two-dimensional plane"
	    """
	    
	    distance = math.sqrt((x2 - x1)**2 + (y2 - y1)**2)
	    return distance
	    
	    
	__end__

define inline_script import
	set description "Executes Python code"
	set _run ""
	___prepare__
	import math
	import random
	__end__

define logger logger
	set description "Logs experimental data"
	set auto_log yes
	exclude "*_backend"
	exclude PERSISTENT
	exclude TEMPORARY
	exclude acc
	exclude accuracy
	exclude average_response_time
	exclude avg_rt
	exclude background
	exclude closed
	exclude "count_*"
	exclude credentialless
	exclude crossOriginIsolated
	exclude datetime
	exclude description
	exclude devicePixelRatio
	exclude disable_garbage_collection
	exclude experiment_file
	exclude experiment_path
	exclude "font_*"
	exclude foreground
	exclude form_clicks
	exclude fullscreen
	exclude height
	exclude innerHeight
	exclude innerWidth
	exclude isSecureContext
	exclude length
	exclude logfile
	exclude opensesame_codename
	exclude origin
	exclude originAgentCluster
	exclude outerHeight
	exclude outerWidth
	exclude "page?Offset"
	exclude round_decimals
	exclude "screen*"
	exclude "scroll?"
	exclude "sound_*"
	exclude start
	exclude status
	exclude "time_*"
	exclude total_correct
	exclude total_response_time
	exclude total_responses
	exclude width

define mouse_response new_mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define pygaze_drift_correct new_pygaze_drift_correct
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered yes
	set draw_target yes
	set description "Performs eye-tracker drift correction"

define pygaze_init new_pygaze_init
	set tracker_type "Advanced dummy (mouse simulation)"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initializes and calibrates the eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_start_recording new_pygaze_start_recording
	set status_msg start_trial
	set description "Puts the eye tracker out of recording mode"

define pygaze_stop_recording new_pygaze_stop_recording
	set status_msg stop_trial
	set description ""

define inline_script remove_fixdot
	set description "Executes Python code"
	___run__
	del my_canvas['my_fixdot']
	my_canvas.show()
	clock.sleep(500)
	__end__
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run new_pygaze_start_recording True
	run new_pygaze_drift_correct True
	run display_fixdot True
	run display_red_circles True
	run remove_fixdot True
	run display_target True
	run determine_distractor_face True
	run display_distractor True
	run wait_for_saccade True
	run display_change True
	run logger True
	run new_mouse_response True
	run new_pygaze_stop_recording True

define inline_script wait_for_saccade
	set description "Executes Python code"
	___run__
	sx, sy = eyetracker.sample()
	
	while True:
	  
	  _x, _y = eyetracker.sample()
	  
	  distance = getDistance(sx, sy, _x, _y)
	  
	  if distance > THRESHOLD:
	    
	    break
	__end__
	set _prepare ""

